PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = gradcptpy
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine welcome
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    KeyboardComponent welcome_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent welcome_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the main part of the experiment.

        When doing the attention task, respond as quickly and accurately as possible.

        Press the space bar to continue reading.
    CodeComponent welcome_hide_mouse
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = PILOTING
  Routine block_rest
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    CodeComponent write_data_gradcpt
      Code Type = Py
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      Begin Routine:
        write_data(d=es_gradcpt_data, block=str(int(blocks.thisN)).zfill(2), task='ExperienceSampling')
        write_data(d=gradcpt_data, block=str(int(blocks.thisN)).zfill(2), task='GradCPT')
    TextComponent block_rest_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = That's the end of this phase of the experiment. Press the spacebar to continue.
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    KeyboardComponent block_rest_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block_start
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    CodeComponent determine_block_type
      Code Type = Py
      Begin Routine:
        key_display = 'Key for city scenes: {}\n When you see a mountain scene, do not make a response.'.format(dom_key)
    TextComponent black_start_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $key_display + '\n\nPress the space bar to begin.'
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    KeyboardComponent block_start_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent inits
      Code Type = Py
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      End Routine:
        # Init counters
        probe_count = 0
        frame_count = 0
        transition_step = 0
        next_es_trial = round(random.uniform(next_es_min, next_es_max))
        gradcpt_trial = 0
        es_trial = 0
        gradcpt_data = []
        es_gradcpt_data = []
        do_es = False

        # Init clock
        routine_start = datetime.now()

        # Init stim
        stim_set, conditions = create_stim_sequence(dom_stim, nondom_stim, N_dom, N_nondom)

        transition_current = np.linspace(np.zeros((256, 256)), # Grey
                                  stim_set[gradcpt_trial], # Image 1
                                  transition_steps)
        transition_next = np.linspace(stim_set[gradcpt_trial], # Image 1
                                  stim_set[gradcpt_trial+1], # Image 2
                                  transition_steps)


        trial_start_time = datetime.now()

        feedback = 'GradCPT trial: {}\nNext probe: {}'.format(gradcpt_trial, next_es_trial)

        event.clearEvents()
  Routine Thanks
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    TextComponent thanks_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thank you for your participation!
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  Routine ES_gradcpt
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    CodeComponent ES_gradcpt_code
      Code Type = Py
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      Begin Routine:
        if not do_es:
            ES_loop.finished = True
            continueRoutine=False
        else:
            # Random mouse initialization
            jitter = random.uniform(-.05, .05)
            es_gradcpt_mouse.setPos(newPos = (jitter, -.4))
            win.mouseVisible = True
            item_onset = (datetime.now() - routine_start).total_seconds()
            # Shuffle non-confidence questions
            # (conf rating always last)
            if not es_trial:
                non_conf = es_items[:-1]
                random.shuffle(non_conf)
                cur_items = non_conf + [es_items[-1]]
                next_es_trial = round(random.uniform(gradcpt_trial+30, gradcpt_trial+45))

            es_text = cur_items[es_trial]['text']
            es_low_anchor = cur_items[es_trial]['low_anchor']
            es_high_anchor = cur_items[es_trial]['high_anchor']
    TextComponent es_text_component_gradcpt
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $es_text
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    SliderComponent es_gradcpt_slider
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1)
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    KeyboardComponent es_gradcpt_key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [condition] = es_gradcpt_slider.rating
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    TextComponent low_anchor_gradcpt
      color = black
      letterHeight = 0.05
      pos = (-.5, -.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $es_low_anchor
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    MouseComponent es_gradcpt_mouse
      forceEndRoutineOnPress = never
      saveMouseState = never
      startVal [time (s)] = 0.0
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    TextComponent high_anchor_gradcpt
      color = black
      letterHeight = 0.05
      pos = (.5, -.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $es_high_anchor
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    TextComponent enter_advance_gradcpt
      color = black
      letterHeight = 0.05
      pos = (0, -.2)
      startVal [condition] = es_gradcpt_slider.rating
      text = Press "Enter" to advance.
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    CodeComponent save_data_es_gradcpt
      Code Type = Py
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      End Routine:
        if do_es:
            slider_rating = es_gradcpt_slider.rating
            slider_rt = es_gradcpt_slider.rt
            enter_rt = es_gradcpt_key_resp.rt
            es_gradcpt_data.append({
                'subject': expInfo['participant'],
                'block': blocks.thisN,
                'total_runtime_mins': (datetime.now() - experiment_start_time).total_seconds() / 60,
                'gradcpt_trial': gradcpt_trial+1,
                'probe': probe_count,
                # Index starting at 1
                'trial': es_trial + 1,
                'item_name': cur_items[es_trial]['item_name'],
                'low_anchor': cur_items[es_trial]['low_anchor'],
                'high_anchor': cur_items[es_trial]['high_anchor'],
                'item_onset_s': item_onset,
                'response': slider_rating,
                'slider_rt': slider_rt,
                'enter_rt': enter_rt
               })

            # Changing es_trial here bc it affects the index of es_items
            es_trial += 1
            win.mouseVisible = False
  Routine ES_isi_gradcpt
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    TextComponent es_gradcpt_isi_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $es_isi_time
      text = +
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    CodeComponent es_gradcpt_code
      Code Type = Py
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      Begin Routine:
        if not do_es:
            continueRoutine=False
            ES_loop.finished = True
  Routine gradcpt_stim
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    CodeComponent stim_code
      Code Type = Py
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      Before Experiment:
        from custom_stimuli import create_custom_stim_sequence
      Begin Experiment:
        key_display = 'Key for city scenes: {}\n When you see a mountain scene, do not make a response.'.format(dom_key)
      Begin Routine:
        pressed_key = False
        # Need this and *not* a keyboard component
        kb = keyboard.Keyboard()

        # Init counters
        #probe_count = 0
        frame_count = 0
        transition_step = 0
        #next_es_trial = round(random.uniform(next_es_min, next_es_max))
        gradcpt_trial = 0
        #es_trial = 0
        gradcpt_data = []
        #es_gradcpt_data = []
        #do_es = False



        # Init clock
        routine_start = globalClock.getTime(format='float')

        # Init stim
        #stim_set, conditions = create_stim_sequence(dom_stim, nondom_stim, N_dom, N_nondom)
        stim_set, conditions = create_custom_stim_sequence(dom_stim, nondom_stim, N_dom, N_nondom)

        transition_current = np.linspace(np.zeros((256, 256)), # Grey
                                  stim_set[gradcpt_trial], # Image 1
                                  transition_steps)
        transition_next = np.linspace(stim_set[gradcpt_trial], # Image 1
                                  stim_set[gradcpt_trial+1], # Image 2
                                  transition_steps)


        trial_start_time = globalClock.getTime(format='float')
        time_since_this_trial = 0

        #feedback = 'GradCPT trial: {}\nNext probe: {}'.format(gradcpt_trial, next_es_trial)

        event.clearEvents()
      Each Frame:
        time_since_this_trial = globalClock.getTime(format='float') - trial_start_time
        transition_step = round(time_since_this_trial / transition_time * transition_steps)

        # If a key was pressed
        keys = kb.getKeys(keyList = ['j', 'f'], waitRelease=False, clear=True)
        if keys:
            # Assuming only one key press possible per frame
            # (and grabbing the first key pressed if not)
            rt = time_since_this_trial
            key = keys[0].name
            # Keeps from writing out an omission
            pressed_key = True
            gradcpt_data.append(save_gradcpt_data(rt, key))
            # Send the key pressed to LSL
            try:
                outlet.push_sample([rt])
            except AttributeError:
                # Handle special keys (like Shift, Ctrl, etc.)
                outlet.push_sample([rt])
            kb.clearEvents()

        # if end of trial
        if transition_step >= transition_steps:
            flipPhotoRect()
            # If no key was pressed in that trial, log omission
            if not pressed_key:
                gradcpt_data.append(save_gradcpt_data(0, 0))
            # Reset pressed key check
            pressed_key = False
            # Update trial count
            gradcpt_trial += 1
            transition_step = 0
            trial_start_time = globalClock.getTime(format='float')

            # If it's after the last trial (trial is zero indexed)
            # End routine and loop
            if gradcpt_trial == N_trials:
                continueRoutine = False
                transition_current = transition_next
                # Do one more experience sample
        #        do_es = True
        #        probe_count += 1
            # If it's probe time
        #    elif gradcpt_trial == next_es_trial:
        #        # Have the next image after experience sampling fade in from grey
        #        grey = np.zeros((256, 256))
        #        image1 = stim_set[gradcpt_trial]
        #        image2 = np.zeros((256, 256))
        #        if gradcpt_trial + 1 < len(stim_set):
        #            image2 = stim_set[gradcpt_trial+1]
        #
        #        image2 = stim_set[gradcpt_trial+1]
        #        transition_current = np.linspace(grey, image1, transition_steps, endpoint=False)
        #        transition_next = np.linspace(image1, image2, transition_steps, endpoint=False)
        #        do_es = True
        #        probe_count += 1
        #        continueRoutine = False
            else:
                # Update stimulus set
                image1 = stim_set[gradcpt_trial]
                image2 = np.zeros((256, 256))
                if gradcpt_trial + 1 < len(stim_set):
                    image2 = stim_set[gradcpt_trial+1]

                # Prepare for next trial
                transition_current = transition_next
                # Generate a transition array of shape (transition_steps, 256, 256)
                # containing one transition image per each frame of the transition
                transition_next = np.linspace(image1, image2, transition_steps, endpoint=False)



        # Each new frame within a trial,
        # update the image to the corresponding image from the transition array
        img = transition_current[transition_step]

        # increment local counters
        frame_count += 1
      End Routine:
        # write_data(d=es_gradcpt_data, block=str(int(blocks.thisN)).zfill(2), task='ExperienceSampling')
        write_data(d=gradcpt_data, block=str(0).zfill(2), task='GradCPT')
    ImageComponent gradcpt_image
      image [set every frame] = $img
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent pixel
      anchor = bottom-left
      fillColor = white
      lineWidth = 0
      pos = (-0.95, -0.95)
      shape = rectangle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      units = norm
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  Routine gradcpt_prep
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    CodeComponent instruction_fill_code
      Code Type = Py
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      Begin Routine:
        # Instruction fill

        the_dom_key = 'the {} key'.format(dom_key)
        nondom = 'nothing'
        stats = ''

        if PILOTING:
            stats = 'refresh rate: {}, steps: {},  time: {}'.format(refresh_rate, transition_steps, transition_time)


        instruction_fill = ('Now you will perform the attention task. A series of '
        'pictures will gradually be presented on the screen one after another. In this '
        'phase of the experiment, you will press {} when you see a picture of a city '
        'scene, and you will press {} when you see a picture of a mountain scene. '
        'It is important to respond as quickly and accurately as possible and to keep '
        'both hands on the keyboard at all times.\n\n'
        'City Key: {} - Montain Key: {}'
        '\n\nPress the space bar to see the response\n\n '
        '{}'.format(the_dom_key, nondom, dom_key, nondom, stats))
    TextComponent gradcpt_prep_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_fill
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine debrief
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    TextComponent debrief_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = Some debriefing text.
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    KeyboardComponent debrief_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine estimate_frame_rate
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    CodeComponent function_defs
      Code Type = Py
      Begin Experiment:
        def write_data(d, block, task):
            '''
            A function to write neatly formatted data to a neat_data directory
            # --- PARAMETERS --- #
            d (list of dict): The trial data stored as a list of dictionaries
            block (str): The block number as a two character string
            task (str): The name of the task
            '''

            if not os.path.exists('neat_data'):
                os.mkdir('neat_data')
            subject = expInfo['participant']
            filename = 'neat_data/sub-{}_task-{}_block-{}.csv'.format(subject, task, block)
            pd.DataFrame(d).to_csv(filename, index=False)



        def create_stim_sequence(dom_stim, nondom_stim, N_dom, N_nondom):
            # Creates the stimulus sequence for GradCPT
            # Inputs:
                # Set of (10) dominant (city) stimuli; list of np.ndarrays
                # Set of (10) non dominant (mountain) stimuli; list of np.arrays
                # Number of dominant stimuli needed in the sequence; int
                # Number of nondominant stimuli needed in the sequence; int
            # Returns:
                # A list of images (np.ndarrays) with:
                    # as many city images as N_dom
                    # as many mountain images as N_nondom
                    # in pseudo random order such that no two images follow each other

            # First, create dom / nondom sequence
            conditions = ['dom'] * N_dom + ['nondom'] * N_nondom
            random.shuffle(conditions)
            stim_set = [None] * len(conditions)

            # Second, assign first image
            stim_set[0] = random.choice(dom_stim) if conditions[0] == 'dom' else random.choice(nondom_stim)

            # Finally, iterate and assign remainder of images
            for i in range(1, len(stim_set)):
                new_image = stim_set[i-1]
                # Randomly choose new image as long as the chosen image is equal to the previous image
                while np.array_equal(new_image, stim_set[i-1]):
                    if conditions[i] == 'dom':
                        new_image = random.choice(dom_stim)
                    else:
                        new_image = random.choice(nondom_stim)

                # Assign the image only when it's not the previous image
                stim_set[i] = new_image

            return (stim_set, conditions)



        def save_gradcpt_data(rt, key):
            # Calling vars beyond the local scope of the function
            out = {
                'subject': expInfo['participant'],
                'total_runtime_mins': (datetime.now() - experiment_start_time).total_seconds(),
                'dom_key': dom_key,
                # Start trial counter at one
                'gradcpt_trial': gradcpt_trial+1,
                'frame_count': frame_count,
                'transition_step': transition_step,
                'coherence': transition_step / transition_steps,
                'condition': conditions[gradcpt_trial],
                'resp_key': key,
                'rt': rt
            }
            return out

        # --- FUNCTIONS FOR FORMATTING GRADCPT STIMULI --- #

        def normalize_image(img):
            # Normalize from 0 255 to -1 1
            return (img / 255) * 2 - 1

        def crop_image(img):
            # Create a circular mask
            height, width = img.shape
            y, x = np.ogrid[:height, :width]
            center_y, center_x = height / 2, width / 2
            radius = min(center_x, center_y)
            circle_mask = ((y - center_y) ** 2 + (x - center_x) ** 2) <= radius ** 2
            # Apply mask
            img[~circle_mask] = 0
            # Image needs to be vertically flipped for some reason
            return np.flipud(img)
      Begin Routine:
        def flipPhotoRect():
            nonlocal photoDiodeColor
            if photoDiodeColor == 0:
                pixel.setFillColor([-1,-1,-1])
                photoDiodeColor = 1
            else:
                pixel.setFillColor([1,1,1])
                photoDiodeColor = 0
    CodeComponent global_vars
      Code Type = Py
      Before Experiment:
        import random
        from datetime import datetime
        import pickle
        import imageio
        from glob import glob
        import math
        import pandas as pd
        from pylsl import StreamInfo, StreamOutlet
      Begin Experiment:
        # ~~ GRADCPT VARIABLES ~~ #
        # Number of GradCPT trials to perform
        N_trials = 1800
        # Number of GradCPT blocks to perform
        #N_blocks = 2
        # GradCPT stimuli transition timing
        transition_time = .8 # in seconds
        # Min and max trials before ES probe
        #next_es_min = 30
        #next_es_max = 45
        # What proportion of stimuli are city scenes (dominant)?
        prop_dom = .9

        # ~~LSL~~ #
        info = StreamInfo(name='cpt', type='KeyBoard', channel_count=1, nominal_srate=1, channel_format='float32', source_id='eeg123')
        channel_names = ['rt']
        channels = info.desc().append_child('channels')
        for i, name in enumerate(channel_names):
            channels.append_child('channel').append_child_value('label', name)
        outlet = StreamOutlet(info)

        # ~~ EXPERIENCE SAMPLING VARIABLES ~~ #
        # Time (s) between each experience sampling item
        #es_isi_time = .5
        # Experience sampling items
        # Order will be shuffled except last item (confidence) will always be presented last
        #es_items = [
        #    {'item_name': 'distractedness',
        #    'text': "Where was your attention during the previous trial?",
        #    'low_anchor': 'on-task',
        #    'high_anchor': 'off-task'
        #    },
        #    {'item_name': 'affect',
        #    'text': 'How positive or negative were you feeling?',
        #    'low_anchor': 'completely\nnegative',
        #    'high_anchor': 'completely\npositive'
        #    },
        #    {'item_name': 'disengage_difficulty',
        #    'text': 'How difficult was it to disengage from your thoughts?',
        #    'low_anchor': 'extremely\neasy',
        #    'high_anchor': 'extremely\ndifficult'
        #    },
        #    {'item_name': 'movement',
        #    'text': 'Were your thoughts freely moving?',
        #    'low_anchor': 'unmoving',
        #    'high_anchor': 'moving freely'
        #    },
        #    {'item_name': 'deliberate',
        #    'text': 'How intentional were your thoughts?',
        #    'low_anchor': 'completely\nunintentional',
        #    'high_anchor': 'completely\nintentional'
        #    },
        #    {'item_name': 'confidence',
        #    'text': 'How confident are you about your ratings for this trial?',
        #    'low_anchor': 'completely\nunconfident',
        #    'high_anchor': 'completely\nconfident'
        #    }
        #]

        # ~~ VARIABLES THAT SHOULDNT NEED TO BE CHANGED ~~ #
        # Random response mapping assignment
        dom_key = 'j' if random.choice([0, 1]) else 'f'
        nondom_key = 'j' if dom_key == 'f' else 'f'

        # Stimulus (image) location
        dom_files = glob('scenes5/city/*.jpg')
        nondom_files = glob('scenes5/mountain/*.jpg')

        # Total number of each stimulus type
        N_dom = round(N_trials * prop_dom)
        N_nondom = N_trials - N_dom

        # Inits
        gradcpt_trial = 0
        key_display = ''
        #es_data = []
        gradcpt_data = []
        #es_gradcpt_data = []
        refresh_rate = ''
        transition_steps = ''
        experiment_start_time = datetime.now()
        photoDiodeColor = 0


        # ~~ GENERATE STIMULI ~~ #
        # The actual sequence is generated before each GradCPT run so stimuli are randomized
        # see create_stim_sequence() in function_defs
        dom_stim = []
        nondom_stim = []

        # Import and process images (see function_defs code block)
        for dom_file, nondom_file in zip(dom_files, nondom_files):
            # Import
            dom_image = np.array(imageio.imread(dom_file))
            nondom_image = np.array(imageio.imread(nondom_file))
            # Normalize
            dom_image = normalize_image(dom_image)
            nondom_image = normalize_image(nondom_image)
            # Crop
            dom_image = crop_image(dom_image)
            nondom_image = crop_image(nondom_image)
            # Append
            dom_stim.append(dom_image)
            nondom_stim.append(nondom_image)


        # ~~ EXPERIENCE SAMPLING VARIABLES ~~ #
        #es_trial = 0
        #do_es = False
        #es_text = ''
        #es_low_anchor = ''
        #es_high_anchor = ''
      Begin Routine:
        win.mouseVisible = PILOTING
    TextComponent frame_rate_prompt
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Trying to estimate frame rate....
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    CodeComponent estimate_frame_rate_code
      Code Type = Py
      Begin Routine:
        # Code for manually estimating the monitor refresh rate
        frame_rate_data = []
        start_routine = datetime.now()
      Each Frame:
        frame_rate_data.append(math.floor((datetime.now() - start_routine).total_seconds()))
      End Routine:
        _, counts = np.unique(np.array(frame_rate_data), return_counts=True)
        refresh_rate = np.mean(counts)
        print(refresh_rate)
        transition_steps = round(refresh_rate * transition_time)
        print(transition_steps)
  Routine prepare_trial
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    CodeComponent prepare_code
      Code Type = Py
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      Begin Routine:
        if trials.finished:
            continueRoutine = False
        prepare_start_time = datetime.now()
        timer = 5
      Each Frame:
        timer = 5 - round((datetime.now() - prepare_start_time).total_seconds())
      End Routine:
        trial_start_time = datetime.now()
    TextComponent prepare_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $'The next images will appear in {} seconds.'.format(timer)
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  Routine prepare_block
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    CodeComponent prepare_block_code
      Code Type = Py
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      Begin Routine:
        prepare_start = datetime.now()
      Each Frame:
        timer = round(5 - (datetime.now() - prepare_start).total_seconds())
    TextComponent prepare_block_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $'The next images will appear in {} seconds.'.format(timer)
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Flow
  Routine estimate_frame_rate
  Routine welcome
  Routine gradcpt_prep
  Routine gradcpt_stim
  Routine debrief
  Routine Thanks
